# Generated by Configurator on Wed Dec 12 18:41:27 PST 2018

# Reset
Property,Core,Initialize,0

# Devices
Device,COM6,SerialManager,COM6
Device,COM1,SerialManager,COM1
Device,COM5,SerialManager,COM5
Device,COM4,SerialManager,COM4
Device,Right-EMCCD,PVCAM,Camera-1
Device,TIScope,NikonTI,TIScope
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlockBottom,NikonTI,TIFilterBlock1
Device,TIFilterBlockTop,NikonTI,TIFilterBlock2
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,TITIRF,NikonTI,TITIRF
Device,XYStage,ASIStage,XYStage
Device,Excitation,SutterLambda,Wheel-B
Device,Emission,SutterLambda,Wheel-C
Device,Shutter-A,SutterLambda,Shutter-A
Device,Shutter-B,SutterLambda,Shutter-B
Device,Left-EMCCD,Andor,Andor
Device,CSUW1-Hub,CSUW1,CSUW1-Hub
Device,CSUW1-Filter Wheel,CSUW1,CSUW1-Filter Wheel
Device,CSUW1-Dichroic Mirror,CSUW1,CSUW1-Dichroic Mirror
Device,CSUW1-Shutter,CSUW1,CSUW1-Shutter
Device,CSUW1-Drive Speed,CSUW1,CSUW1-Drive Speed
Device,CSUW1-Bright Field,CSUW1,CSUW1-Bright Field
Device,CSUW1-Aperture,CSUW1,CSUW1-Aperture
Device,CSUW1-Magnifier,CSUW1,CSUW1-Magnifier
Device,TriggerScope-Hub,TriggerScope,TriggerScope-Hub
Device,405 Power,TriggerScope,TriggerScope-DAC01
Device,440 Power,TriggerScope,TriggerScope-DAC02
Device,488 Power,TriggerScope,TriggerScope-DAC03
Device,514 Power,TriggerScope,TriggerScope-DAC04
Device,561 Power,TriggerScope,TriggerScope-DAC05
Device,Line 6DAQ-not used,TriggerScope,TriggerScope-DAC06
Device,405 Shutter,TriggerScope,TriggerScope-TTL01
Device,440 Shutter,TriggerScope,TriggerScope-TTL02
Device,488 Shutter,TriggerScope,TriggerScope-TTL03
Device,514 Shutter,TriggerScope,TriggerScope-TTL04
Device,561 Shutter,TriggerScope,TriggerScope-TTL05
Device,Line 6TTL-not used,TriggerScope,TriggerScope-TTL06
Device,Stream Piezo Z,TriggerScope,TriggerScope-Focus
Device,Port Switcher line 1,TriggerScope,TriggerScope-TTL15
Device,Port Switcher line 2,TriggerScope,TriggerScope-TTL16
Device,Master laser shutter,Utilities,Multi Shutter
Device,Laser 405 Shutter,Utilities,State Device Shutter
Device,Laser 440 Shutter,Utilities,State Device Shutter
Device,Laser 488 Shutter,Utilities,State Device Shutter
Device,Laser 514 Shutter,Utilities,State Device Shutter
Device,Laser 561 Shutter,Utilities,State Device Shutter

# Pre-init settings for devices
Property,COM6,AnswerTimeout,250.0000
Property,COM6,BaudRate,128000
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM1,AnswerTimeout,250.0000
Property,COM1,BaudRate,115200
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM5,AnswerTimeout,250.0000
Property,COM5,BaudRate,57600
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM4,AnswerTimeout,250.0000
Property,COM4,BaudRate,9600
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,XYStage,Port,COM4
Property,Excitation,Port,COM6
Property,Excitation,Timeout(ms),250
Property,Emission,Port,COM6
Property,Emission,Timeout(ms),250
Property,Shutter-A,Port,COM6
Property,Shutter-B,Port,COM6
Property,CSUW1-Hub,Port,COM1
Property,CSUW1-Filter Wheel,WheelNumber,1
Property,CSUW1-Magnifier,MagnifierNumber,1
Property,TriggerScope-Hub,Port,COM5
Property,Stream Piezo Z,Lower Limit,-75.0000
Property,Stream Piezo Z,Upper Limit,75.0000

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TINosePiece,TIScope
Parent,TIFilterBlockBottom,TIScope
Parent,TIFilterBlockTop,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope
Parent,TITIRF,TIScope
Parent,405 Power,TriggerScope-Hub
Parent,440 Power,TriggerScope-Hub
Parent,488 Power,TriggerScope-Hub
Parent,514 Power,TriggerScope-Hub
Parent,561 Power,TriggerScope-Hub
Parent,Line 6DAQ-not used,TriggerScope-Hub
Parent,405 Shutter,TriggerScope-Hub
Parent,440 Shutter,TriggerScope-Hub
Parent,488 Shutter,TriggerScope-Hub
Parent,514 Shutter,TriggerScope-Hub
Parent,561 Shutter,TriggerScope-Hub
Parent,Line 6TTL-not used,TriggerScope-Hub
Parent,Stream Piezo Z,TriggerScope-Hub
Parent,Port Switcher line 1,TriggerScope-Hub
Parent,Port Switcher line 2,TriggerScope-Hub

# Initialize
Property,Core,Initialize,1

# Delays
Delay,TINosePiece,200.0
Delay,TIFilterBlockBottom,100.0
Delay,TIFilterBlockTop,100.0
Delay,TILightPath,500.0
Delay,561 Shutter,10.0

# Focus directions

# Roles
Property,Core,Camera,Left-EMCCD
Property,Core,Shutter,Master laser shutter
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Plan Apo 60x NA 1.40 Oil
Label,TINosePiece,4,5-Apo TIRF 100x NA 1.49 Oil
Label,TINosePiece,3,4-Apo TIRF 60x NA 1.49 Oil
Label,TINosePiece,2,3-Plan Apo 40x NA 0.95 Dry
Label,TINosePiece,1,2-Plan Apo 20x NA 0.75 Dry
Label,TINosePiece,0,1-Plan Fluor 10x NA 0.30 Dry
# TIFilterBlockBottom
Label,TIFilterBlockBottom,5,6------
Label,TIFilterBlockBottom,4,5-50/50 Split
Label,TIFilterBlockBottom,3,4-SedatQuad
Label,TIFilterBlockBottom,2,3-405/488/561/650 TIRF
Label,TIFilterBlockBottom,1,2-405 TIRF
Label,TIFilterBlockBottom,0,1-ANALY
# TIFilterBlockTop
Label,TIFilterBlockTop,5,6-600sp
Label,TIFilterBlockTop,4,5-Open
Label,TIFilterBlockTop,3,4-Open
Label,TIFilterBlockTop,2,3-387lp
Label,TIFilterBlockTop,1,2-488lp
Label,TIFilterBlockTop,0,1-Empty
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100
# Excitation
Label,Excitation,9,500/20
Label,Excitation,8,430/24
Label,Excitation,7,403/12
Label,Excitation,6,572/35
Label,Excitation,5,470/40
Label,Excitation,4,561/10
Label,Excitation,3,490/20
Label,Excitation,2,350/20
Label,Excitation,1,EMPTY
Label,Excitation,0,555/28
# Emission
Label,Emission,9,625 SP
Label,Emission,8,750/60
Label,Emission,7,632/60
Label,Emission,6,525/50
Label,Emission,5,535/30
Label,Emission,4,470/24
Label,Emission,3,NOTCH 405/488/561/635
Label,Emission,2,480/40
Label,Emission,1,ANALYYZER
Label,Emission,0,EMPTY
# CSUW1-Filter Wheel
Label,CSUW1-Filter Wheel,9,FULL
Label,CSUW1-Filter Wheel,8,405/488/561/635
Label,CSUW1-Filter Wheel,7,442/514/568
Label,CSUW1-Filter Wheel,6,FULL
Label,CSUW1-Filter Wheel,5,EMPTY
Label,CSUW1-Filter Wheel,4,620/60
Label,CSUW1-Filter Wheel,3,535/30
Label,CSUW1-Filter Wheel,2,525/50
Label,CSUW1-Filter Wheel,1,480/40
Label,CSUW1-Filter Wheel,0,450/50
# CSUW1-Dichroic Mirror
Label,CSUW1-Dichroic Mirror,2,BRIGHTFIELD
Label,CSUW1-Dichroic Mirror,1,TRIPLE
Label,CSUW1-Dichroic Mirror,0,QUAD
# CSUW1-Bright Field
Label,CSUW1-Bright Field,1,Bright Field
Label,CSUW1-Bright Field,0,Confocal

# Configuration presets
# Group: _________piezo position (um)
# Preset: NewPreset
ConfigGroup,_________piezo position (um),NewPreset,Stream Piezo Z,Position,0.0000


# Group: ________Right Emission Wheel
# Preset: 480-40
ConfigGroup,________Right Emission Wheel,480-40,Emission,Label,480/40

# Preset: 525-50
ConfigGroup,________Right Emission Wheel,525-50,Emission,Label,525/50

# Preset: EMPTY
ConfigGroup,________Right Emission Wheel,EMPTY,Emission,Label,ANALYYZER

# Preset: FULL
ConfigGroup,________Right Emission Wheel,FULL,Emission,Label,750/60

# Preset: 470-24
ConfigGroup,________Right Emission Wheel,470-24,Emission,Label,470/24

# Preset: ANALYYZER
ConfigGroup,________Right Emission Wheel,ANALYYZER,Emission,Label,ANALYYZER

# Preset: 535-30
ConfigGroup,________Right Emission Wheel,535-30,Emission,Label,535/30

# Preset: 632-60
ConfigGroup,________Right Emission Wheel,632-60,Emission,Label,632/60

# Preset: 625 SP
ConfigGroup,________Right Emission Wheel,625 SP,Emission,Label,625 SP

# Preset: NOTCH 405-488-561-635
ConfigGroup,________Right Emission Wheel,NOTCH 405-488-561-635,Emission,Label,NOTCH 405/488/561/635


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Laser 405 Shutter,State Device,405 Shutter
ConfigGroup,System,Startup,Laser 440 Shutter,State Device,440 Shutter
ConfigGroup,System,Startup,Laser 488 Shutter,State Device,488 Shutter
ConfigGroup,System,Startup,Laser 514 Shutter,State Device,514 Shutter
ConfigGroup,System,Startup,Laser 561 Shutter,State Device,561 Shutter
ConfigGroup,System,Startup,405 Power,Volts,3.0000
ConfigGroup,System,Startup,440 Power,Volts,3.0000
ConfigGroup,System,Startup,488 Power,Volts,3.0000
ConfigGroup,System,Startup,514 Power,Volts,3.0000
ConfigGroup,System,Startup,561 Power,Volts,3.0000
ConfigGroup,System,Startup,Left-EMCCD,VerticalClockVoltage,Normal
ConfigGroup,System,Startup,Left-EMCCD,VerticalSpeed (microseconds),1.13
ConfigGroup,System,Startup,CSUW1-Shutter,State,Open
ConfigGroup,System,Startup,Left-EMCCD,FrameTransfer,On
ConfigGroup,System,Startup,Left-EMCCD,Gain,200
ConfigGroup,System,Startup,Stream Piezo Z,Position,0.0000
ConfigGroup,System,Startup,Shutter-B,State,0
ConfigGroup,System,Startup,Shutter-A,State,0


# Group: _________PFS offset
# Preset: NewPreset
ConfigGroup,_________PFS offset,NewPreset,TIPFSOffset,Position,85.2500


# Group: _____Laser_Port
# Preset: CONFOCAL
ConfigGroup,_____Laser_Port,CONFOCAL,Port Switcher line 1,State,1
ConfigGroup,_____Laser_Port,CONFOCAL,Port Switcher line 2,State,1


# Group: __________PFS status
# Preset: On
ConfigGroup,__________PFS status,On,TIPFSStatus,State,On

# Preset: Off
ConfigGroup,__________PFS status,Off,TIPFSStatus,State,Off


# Group: _____MAG Changer
# Preset: 2X
ConfigGroup,_____MAG Changer,2X,CSUW1-Magnifier,Label,Magnifier-2
ConfigGroup,_____MAG Changer,2X,Core,Camera,Left-EMCCD

# Preset: 1X
ConfigGroup,_____MAG Changer,1X,CSUW1-Magnifier,Label,Magnifier-1
ConfigGroup,_____MAG Changer,1X,Core,Camera,Left-EMCCD


# Group: ___488 Laser Power
# Preset: NewPreset
ConfigGroup,___488 Laser Power,NewPreset,488 Power,Volts,7.4900


# Group: __ANDOR-Cam_EM_Gain
# Preset: NewPreset
ConfigGroup,__ANDOR-Cam_EM_Gain,NewPreset,Left-EMCCD,Gain,223


# Group: ____TIRF Angle
# Preset: NewPreset
ConfigGroup,____TIRF Angle,NewPreset,TITIRF,Position,0


# Group: _Confocal
# Preset: 561
ConfigGroup,_Confocal,561,TILightPath,Label,2-Left100
ConfigGroup,_Confocal,561,CSUW1-Filter Wheel,Label,620/60
ConfigGroup,_Confocal,561,CSUW1-Dichroic Mirror,Label,QUAD
ConfigGroup,_Confocal,561,CSUW1-Bright Field,BrightFieldPort,Confocal
ConfigGroup,_Confocal,561,Core,Camera,Left-EMCCD
ConfigGroup,_Confocal,561,Core,Shutter,Laser 561 Shutter
ConfigGroup,_Confocal,561,Port Switcher line 1,State,1
ConfigGroup,_Confocal,561,Port Switcher line 2,State,1
ConfigGroup,_Confocal,561,TIFilterBlockBottom,Label,6------
ConfigGroup,_Confocal,561,TIFilterBlockTop,Label,1-Empty

# Preset: 488
ConfigGroup,_Confocal,488,TILightPath,Label,2-Left100
ConfigGroup,_Confocal,488,CSUW1-Filter Wheel,Label,525/50
ConfigGroup,_Confocal,488,CSUW1-Dichroic Mirror,Label,QUAD
ConfigGroup,_Confocal,488,CSUW1-Bright Field,BrightFieldPort,Confocal
ConfigGroup,_Confocal,488,Core,Camera,Left-EMCCD
ConfigGroup,_Confocal,488,Core,Shutter,Laser 488 Shutter
ConfigGroup,_Confocal,488,Port Switcher line 1,State,1
ConfigGroup,_Confocal,488,Port Switcher line 2,State,1
ConfigGroup,_Confocal,488,TIFilterBlockBottom,Label,6------
ConfigGroup,_Confocal,488,TIFilterBlockTop,Label,1-Empty

# Preset: DIA
ConfigGroup,_Confocal,DIA,TILightPath,Label,2-Left100
ConfigGroup,_Confocal,DIA,CSUW1-Filter Wheel,Label,EMPTY
ConfigGroup,_Confocal,DIA,CSUW1-Dichroic Mirror,Label,QUAD
ConfigGroup,_Confocal,DIA,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_Confocal,DIA,Core,Camera,Left-EMCCD
ConfigGroup,_Confocal,DIA,Core,Shutter,Shutter-A
ConfigGroup,_Confocal,DIA,Port Switcher line 1,State,1
ConfigGroup,_Confocal,DIA,Port Switcher line 2,State,1
ConfigGroup,_Confocal,DIA,TIFilterBlockBottom,Label,1-ANALY
ConfigGroup,_Confocal,DIA,TIFilterBlockTop,Label,1-Empty

# Preset: 405
ConfigGroup,_Confocal,405,TILightPath,Label,2-Left100
ConfigGroup,_Confocal,405,CSUW1-Filter Wheel,Label,450/50
ConfigGroup,_Confocal,405,CSUW1-Dichroic Mirror,Label,QUAD
ConfigGroup,_Confocal,405,CSUW1-Bright Field,BrightFieldPort,Confocal
ConfigGroup,_Confocal,405,Core,Camera,Left-EMCCD
ConfigGroup,_Confocal,405,Core,Shutter,Laser 405 Shutter
ConfigGroup,_Confocal,405,Port Switcher line 1,State,1
ConfigGroup,_Confocal,405,Port Switcher line 2,State,1
ConfigGroup,_Confocal,405,TIFilterBlockBottom,Label,6------
ConfigGroup,_Confocal,405,TIFilterBlockTop,Label,1-Empty

# Group: Channel

# Group: __EVOLVE-Cam-EM_Gain
# Preset: NewPreset
ConfigGroup,__EVOLVE-Cam-EM_Gain,NewPreset,Right-EMCCD,MultiplierGain,1


# Group: ___561 Laser Power
# Preset: NewPreset
ConfigGroup,___561 Laser Power,NewPreset,561 Power,Volts,0.0000


# Group: ________Epifluor Excitation Wheel
# Preset: 555-28
ConfigGroup,________Epifluor Excitation Wheel,555-28,Excitation,Label,561/10

# Preset: 350-20
ConfigGroup,________Epifluor Excitation Wheel,350-20,Excitation,Label,350/20

# Preset: 572-35
ConfigGroup,________Epifluor Excitation Wheel,572-35,Excitation,Label,572/35

# Preset: 500-20
ConfigGroup,________Epifluor Excitation Wheel,500-20,Excitation,Label,500/20

# Preset: 403-12
ConfigGroup,________Epifluor Excitation Wheel,403-12,Excitation,Label,403/12

# Preset: 490-20
ConfigGroup,________Epifluor Excitation Wheel,490-20,Excitation,Label,490/20

# Preset: EMPTY
ConfigGroup,________Epifluor Excitation Wheel,EMPTY,Excitation,Label,EMPTY

# Preset: FULL
ConfigGroup,________Epifluor Excitation Wheel,FULL,Excitation,Label,FULL

# Preset: 470-40
ConfigGroup,________Epifluor Excitation Wheel,470-40,Excitation,Label,470/40

# Preset: 430-24
ConfigGroup,________Epifluor Excitation Wheel,430-24,Excitation,Label,430/24


# Group: ___514 Laser Power
# Preset: NewPreset
ConfigGroup,___514 Laser Power,NewPreset,514 Power,Volts,0.0000


# Group: ___405 Laser Power
# Preset: NewPreset
ConfigGroup,___405 Laser Power,NewPreset,405 Power,Volts,0.0000


# Group: EPI
# Preset: EPI_RFP
ConfigGroup,EPI,EPI_RFP,TILightPath,Label,2-Left100
ConfigGroup,EPI,EPI_RFP,TITIRF,Mirror,Out
ConfigGroup,EPI,EPI_RFP,Excitation,Label,561/10
ConfigGroup,EPI,EPI_RFP,CSUW1-Filter Wheel,Label,620/60
ConfigGroup,EPI,EPI_RFP,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,EPI,EPI_RFP,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,EPI,EPI_RFP,Core,Camera,Left-EMCCD
ConfigGroup,EPI,EPI_RFP,Core,Shutter,Shutter-B
ConfigGroup,EPI,EPI_RFP,TIFilterBlockBottom,Label,3-405/488/561/650 TIRF
ConfigGroup,EPI,EPI_RFP,TIFilterBlockTop,Label,1-Empty

# Preset: EPI_GFP
ConfigGroup,EPI,EPI_GFP,TILightPath,Label,2-Left100
ConfigGroup,EPI,EPI_GFP,Excitation,Label,470/40
ConfigGroup,EPI,EPI_GFP,Core,Camera,Left-EMCCD
ConfigGroup,EPI,EPI_GFP,Core,Shutter,Shutter-B
ConfigGroup,EPI,EPI_GFP,TITIRF,Mirror,Out
ConfigGroup,EPI,EPI_GFP,CSUW1-Filter Wheel,Label,525/50
ConfigGroup,EPI,EPI_GFP,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,EPI,EPI_GFP,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,EPI,EPI_GFP,TIFilterBlockBottom,Label,3-405/488/561/650 TIRF
ConfigGroup,EPI,EPI_GFP,TIFilterBlockTop,Label,1-Empty

# Preset: EPI_mNeonGreen
ConfigGroup,EPI,EPI_mNG,TILightPath,Label,2-Left100
ConfigGroup,EPI,EPI_mNG,Excitation,Label,490/20
ConfigGroup,EPI,EPI_mNG,Core,Camera,Left-EMCCD
ConfigGroup,EPI,EPI_mNG,Core,Shutter,Shutter-B
ConfigGroup,EPI,EPI_mNG,TITIRF,Mirror,Out
ConfigGroup,EPI,EPI_mNG,CSUW1-Filter Wheel,Label,535/30
ConfigGroup,EPI,EPI_mNG,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,EPI,EPI_mNG,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,EPI,EPI_mNG,TIFilterBlockBottom,Label,3-405/488/561/650 TIRF
ConfigGroup,EPI,EPI_mNG,TIFilterBlockTop,Label,1-Empty

# Preset: EPI_DIA
ConfigGroup,EPI,EPI_DIA,TILightPath,Label,2-Left100
ConfigGroup,EPI,EPI_DIA,TITIRF,Mirror,Out
ConfigGroup,EPI,EPI_DIA,CSUW1-Filter Wheel,Label,EMPTY
ConfigGroup,EPI,EPI_DIA,CSUW1-Dichroic Mirror,Label,QUAD
ConfigGroup,EPI,EPI_DIA,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,EPI,EPI_DIA,Core,Camera,Left-EMCCD
ConfigGroup,EPI,EPI_DIA,Core,Shutter,Shutter-A
ConfigGroup,EPI,EPI_DIA,TIFilterBlockBottom,Label,1-ANALY
ConfigGroup,EPI,EPI_DIA,TIFilterBlockTop,Label,1-Empty

# Preset: RICM
ConfigGroup,EPI,RICM,TILightPath,Label,2-Left100
ConfigGroup,EPI,RICM,TITIRF,Mirror,Out
ConfigGroup,EPI,RICM,Excitation,Label,572/35
ConfigGroup,EPI,RICM,CSUW1-Filter Wheel,Label,EMPTY
ConfigGroup,EPI,RICM,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,EPI,RICM,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,EPI,RICM,Core,Camera,Left-EMCCD
ConfigGroup,EPI,RICM,Core,Shutter,Shutter-B
ConfigGroup,EPI,RICM,TIFilterBlockBottom,Label,5-50/50 Split
ConfigGroup,EPI,RICM,TIFilterBlockTop,Label,1-Empty

# Preset: EPI_BFP
ConfigGroup,EPI,EPI_BFP,TILightPath,Label,2-Left100
ConfigGroup,EPI,EPI_BFP,TITIRF,Mirror,Out
ConfigGroup,EPI,EPI_BFP,Excitation,Label,403/12
ConfigGroup,EPI,EPI_BFP,CSUW1-Filter Wheel,Label,450/50
ConfigGroup,EPI,EPI_BFP,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,EPI,EPI_BFP,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,EPI,EPI_BFP,Core,Camera,Left-EMCCD
ConfigGroup,EPI,EPI_BFP,Core,Shutter,Shutter-B
ConfigGroup,EPI,EPI_BFP,TIFilterBlockBottom,Label,3-405/488/561/650 TIRF
ConfigGroup,EPI,EPI_BFP,TIFilterBlockTop,Label,1-Empty

# Preset: EPI_tSapphire
ConfigGroup,EPI,EPI_tSapphire,TILightPath,Label,2-Left100
ConfigGroup,EPI,EPI_tSapphire,TITIRF,Mirror,Out
ConfigGroup,EPI,EPI_tSapphire,Excitation,Label,403/12
ConfigGroup,EPI,EPI_tSapphire,CSUW1-Filter Wheel,Label,525/50
ConfigGroup,EPI,EPI_tSapphire,CSUW1-Dichroic Mirror,Label,BRIGHTFIELD
ConfigGroup,EPI,EPI_tSapphire,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,EPI,EPI_tSapphire,Core,Camera,Left-EMCCD
ConfigGroup,EPI,EPI_tSapphire,Core,Shutter,Shutter-B
ConfigGroup,EPI,EPI_tSapphire,TIFilterBlockBottom,Label,3-405/488/561/650 TIRF
ConfigGroup,EPI,EPI_tSapphire,TIFilterBlockTop,Label,1-Empty

# Group: ______Focus Drive
# Preset: Stream Piezo Z
ConfigGroup,______Focus Drive,Stream Piezo Z,Core,Focus,Stream Piezo Z

# Preset: TIPFSOffset
ConfigGroup,______Focus Drive,TIPFSOffset,Core,Focus,TIPFSOffset

# Preset: TIZDrive
ConfigGroup,______Focus Drive,TIZDrive,Core,Focus,TIZDrive


# Group: ___440 Laser Power
# Preset: NewPreset
ConfigGroup,___440 Laser Power,NewPreset,440 Power,Volts,0.0000


# Group: __ANDOR-Cam_Binning
# Preset: 4
ConfigGroup,__ANDOR-Cam_Binning,4,Left-EMCCD,Binning,4

# Preset: 2
ConfigGroup,__ANDOR-Cam_Binning,2,Left-EMCCD,Binning,2

# Preset: 1
ConfigGroup,__ANDOR-Cam_Binning,1,Left-EMCCD,Binning,1

# Preset: 8
ConfigGroup,__ANDOR-Cam_Binning,8,Left-EMCCD,Binning,8


# Group: _TIRF
# Preset: 561
ConfigGroup,_TIRF,561,TILightPath,Label,2-Left100
ConfigGroup,_TIRF,561,TITIRF,Mirror,In
ConfigGroup,_TIRF,561,TITIRF,Position,11000
ConfigGroup,_TIRF,561,CSUW1-Filter Wheel,Label,620/60
ConfigGroup,_TIRF,561,CSUW1-Dichroic Mirror,Label,QUAD
ConfigGroup,_TIRF,561,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_TIRF,561,Port Switcher line 1,State,0
ConfigGroup,_TIRF,561,Port Switcher line 2,State,0
ConfigGroup,_TIRF,561,Core,Camera,Left-EMCCD
ConfigGroup,_TIRF,561,Core,Shutter,Laser 561 Shutter
ConfigGroup,_TIRF,561,Excitation,Label,572/35
ConfigGroup,_TIRF,561,TIFilterBlockBottom,Label,3-405/488/561/650 TIRF
ConfigGroup,_TIRF,561,TIFilterBlockTop,Label,1-Empty

# Preset: Mosaic
ConfigGroup,_TIRF,Mosaic,TILightPath,Label,2-Left100
ConfigGroup,_TIRF,Mosaic,TITIRF,Mirror,In
ConfigGroup,_TIRF,Mosaic,TITIRF,Position,11000
ConfigGroup,_TIRF,Mosaic,Excitation,Label,572/35
ConfigGroup,_TIRF,Mosaic,CSUW1-Filter Wheel,Label,EMPTY
ConfigGroup,_TIRF,Mosaic,CSUW1-Dichroic Mirror,Label,QUAD
ConfigGroup,_TIRF,Mosaic,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_TIRF,Mosaic,Port Switcher line 1,State,0
ConfigGroup,_TIRF,Mosaic,Port Switcher line 2,State,0
ConfigGroup,_TIRF,Mosaic,Core,Camera,Left-EMCCD
ConfigGroup,_TIRF,Mosaic,Core,Shutter,Master laser shutter
ConfigGroup,_TIRF,Mosaic,TIFilterBlockBottom,Label,6------
ConfigGroup,_TIRF,Mosaic,TIFilterBlockTop,Label,1-Empty

# Preset: 488
ConfigGroup,_TIRF,488,TILightPath,Label,2-Left100
ConfigGroup,_TIRF,488,TITIRF,Mirror,In
ConfigGroup,_TIRF,488,TITIRF,Position,11900
ConfigGroup,_TIRF,488,CSUW1-Filter Wheel,Label,525/50
ConfigGroup,_TIRF,488,CSUW1-Dichroic Mirror,Label,QUAD
ConfigGroup,_TIRF,488,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_TIRF,488,Port Switcher line 1,State,0
ConfigGroup,_TIRF,488,Port Switcher line 2,State,0
ConfigGroup,_TIRF,488,Core,Camera,Left-EMCCD
ConfigGroup,_TIRF,488,Core,Shutter,Laser 488 Shutter
ConfigGroup,_TIRF,488,Excitation,Label,572/35
ConfigGroup,_TIRF,488,TIFilterBlockBottom,Label,3-405/488/561/650 TIRF
ConfigGroup,_TIRF,488,TIFilterBlockTop,Label,1-Empty


# Preset: RICM
ConfigGroup,_TIRF,RICM,TILightPath,Label,2-Left100
ConfigGroup,_TIRF,RICM,TITIRF,Mirror,Out
ConfigGroup,_TIRF,RICM,TITIRF,Position,11000
ConfigGroup,_TIRF,RICM,Excitation,Label,572/35
ConfigGroup,_TIRF,RICM,CSUW1-Filter Wheel,Label,EMPTY
ConfigGroup,_TIRF,RICM,CSUW1-Dichroic Mirror,Label,QUAD
ConfigGroup,_TIRF,RICM,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_TIRF,RICM,Port Switcher line 1,State,0
ConfigGroup,_TIRF,RICM,Port Switcher line 2,State,0
ConfigGroup,_TIRF,RICM,Core,Camera,Left-EMCCD
ConfigGroup,_TIRF,RICM,Core,Shutter,Shutter-B
ConfigGroup,_TIRF,RICM,TIFilterBlockBottom,Label,5-50/50 Split
ConfigGroup,_TIRF,RICM,TIFilterBlockTop,Label,1-Empty

# Preset: DIA
ConfigGroup,_TIRF,DIA,TILightPath,Label,2-Left100
ConfigGroup,_TIRF,DIA,TITIRF,Mirror,In
ConfigGroup,_TIRF,DIA,TITIRF,Position,11800
ConfigGroup,_TIRF,DIA,CSUW1-Filter Wheel,Label,EMPTY
ConfigGroup,_TIRF,DIA,CSUW1-Dichroic Mirror,Label,QUAD
ConfigGroup,_TIRF,DIA,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_TIRF,DIA,Port Switcher line 1,State,0
ConfigGroup,_TIRF,DIA,Port Switcher line 2,State,0
ConfigGroup,_TIRF,DIA,Core,Camera,Left-EMCCD
ConfigGroup,_TIRF,DIA,Core,Shutter,Shutter-A
ConfigGroup,_TIRF,DIA,Excitation,Label,572/35
ConfigGroup,_TIRF,DIA,TIFilterBlockBottom,Label,1-ANALY
ConfigGroup,_TIRF,DIA,TIFilterBlockTop,Label,1-Empty

# Preset: 405
ConfigGroup,_TIRF,405,TILightPath,Label,2-Left100
ConfigGroup,_TIRF,405,TITIRF,Mirror,In
ConfigGroup,_TIRF,405,TITIRF,Position,11800
ConfigGroup,_TIRF,405,CSUW1-Filter Wheel,Label,480/40
ConfigGroup,_TIRF,405,CSUW1-Dichroic Mirror,Label,QUAD
ConfigGroup,_TIRF,405,CSUW1-Bright Field,BrightFieldPort,Bright Field
ConfigGroup,_TIRF,405,Port Switcher line 1,State,0
ConfigGroup,_TIRF,405,Port Switcher line 2,State,0
ConfigGroup,_TIRF,405,Core,Camera,Left-EMCCD
ConfigGroup,_TIRF,405,Core,Shutter,Laser 405 Shutter
ConfigGroup,_TIRF,405,Excitation,Label,572/35
ConfigGroup,_TIRF,405,TIFilterBlockBottom,Label,3-405/488/561/650 TIRF
ConfigGroup,_TIRF,405,TIFilterBlockTop,Label,1-Empty

# Group: ________Confocal Emission Wheel
# Preset: 480-40
ConfigGroup,________Confocal Emission Wheel,480-40,CSUW1-Filter Wheel,Label,480/40

# Preset: 405-488-561-635
ConfigGroup,________Confocal Emission Wheel,405-488-561-635,CSUW1-Filter Wheel,Label,405/488/561/635

# Preset: 525-50
ConfigGroup,________Confocal Emission Wheel,525-50,CSUW1-Filter Wheel,Label,525/50

# Preset: EMPTY
ConfigGroup,________Confocal Emission Wheel,EMPTY,CSUW1-Filter Wheel,Label,EMPTY

# Preset: FULL
ConfigGroup,________Confocal Emission Wheel,FULL,CSUW1-Filter Wheel,Label,FULL

# Preset: 620-60
ConfigGroup,________Confocal Emission Wheel,620-60,CSUW1-Filter Wheel,Label,620/60

# Preset: 535-30
ConfigGroup,________Confocal Emission Wheel,535-30,CSUW1-Filter Wheel,Label,535/30

# Preset: 450-50
ConfigGroup,________Confocal Emission Wheel,450-50,CSUW1-Filter Wheel,Label,450/50

# Preset: 442-514-568
ConfigGroup,________Confocal Emission Wheel,442-514-568,CSUW1-Filter Wheel,Label,442/514/568



# PixelSize settings
# Resolution preset: evolve 60x
ConfigPixelSize,evolve 60x,TINosePiece,Label,4-Apo TIRF 60x NA 1.49 Oil
PixelSize_um,evolve 60x,0.2664
ConfigPixelSize,evolve 60x,Core,Camera,Right-EMCCD
PixelSize_um,evolve 60x,0.2664

# Resolution preset: andor 20x
ConfigPixelSize,andor 20x,TINosePiece,Label,2-Plan Apo 20x NA 0.75 Dry
PixelSize_um,andor 20x,0.6518
ConfigPixelSize,andor 20x,Core,Camera,Left-EMCCD
PixelSize_um,andor 20x,0.6518

# Resolution preset: andor 10x
ConfigPixelSize,andor 10x,TINosePiece,Label,1-Plan Fluor 10x NA 0.30 Dry
PixelSize_um,andor 10x,1.3076
ConfigPixelSize,andor 10x,Core,Camera,Left-EMCCD
PixelSize_um,andor 10x,1.3076

# Resolution preset: 100x
ConfigPixelSize,100x,TINosePiece,Label,5-Apo TIRF 100x NA 1.49 Oil
PixelSize_um,100x,0.2611
ConfigPixelSize,100x,Core,Camera,Left-EMCCD
PixelSize_um,100x,0.2611


